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System:Additional%20Connections int OperatorBackLink= 1 1 0 1 // Send final state and signal information to Operator (boolean)
Source:Signal%20Properties:DataIOFilter int SourceCh= 64 16 1 % // number of digitized and stored channels
Source:Signal%20Properties:DataIOFilter int SampleBlockSize= 40 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties:DataIOFilter int SamplingRate= 1024 256Hz 1 % // sample rate
Source:Signal%20Properties:DataIOFilter floatlist SourceChOffset= 64 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 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0 0 % % // Offset for channels in A/D units
Source:Signal%20Properties:DataIOFilter floatlist SourceChGain= 64 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 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0.03125 0.003 % % // gain for each channel (A/D units -> muV)
Source:Signal%20Properties:DataIOFilter list ChannelNames= 0 // list of channel names
Storage:Data%20Location:DataIOFilter string DataDirectory= D:\Brad\bci_fESI\BCI2000rt\data ..\data % % // path to top level data directory (directory)
Storage:Session:DataIOFilter string SubjectName= % Name % % // subject alias
Storage:Session:DataIOFilter string SubjectSession= 001 001 % % // three-digit session number
Storage:Session:DataIOFilter string SubjectRun= 01 00 % % // two-digit run number
Storage:Documentation:DataIOFilter string ID_System= % // BCI2000 System Code
Storage:Documentation:DataIOFilter string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation:DataIOFilter string ID_Montage= % // BCI2000 Cap Montage Code
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Source:Biosemi2ADC intlist EEGChList= 64 1 2 3 4 5 6 7 8 9 10 11 12 13 14 15 16 17 18 19 20 21 22 23 24 25 26 27 28 29 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64 % 1 % // list of physical channel indices for the EEG channels in use
Source:Biosemi2ADC intlist AIBChList= 0 % 1 32 // list of Auxiliary Input Box channels to acquire after the EEG channels (included in the SourceCh total)
Source:Biosemi2ADC intlist TriggerChList= 0 % 0 16 // list of one-bit trigger channels to append to the end (included in the SourceCh total) or a single 0 to acquire all trigger channels as a single 16-bit channel
Storage:Documentation:BCI2000FileWriter string StorageTime= 2015-10-29T09:09:54 // time of beginning of data storage
Source:Source%20Filter:SourceFilter int NotchFilter= 2 0 0 2 // Power line notch filter: 0: disabled, 1: at 50Hz, 2: at 60Hz (enumeration)
Source:Source%20Filter:SourceFilter int HighPassFilter= 2 0 0 2 // Source high pass filter: 0: disabled, 1: at 0.1Hz, 2: at 1Hz (enumeration)
Source:Source%20Filter:SourceFilter int LowPassFilter= 0 0 0 4 // Source low pass filter: 0: disabled, 1: at 9Hz, 2: at 30Hz, 3: at 40Hz, 4: at 70Hz (enumeration)
Source:Alignment:AlignmentFilter int AlignChannels= 0 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment:AlignmentFilter floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
Source:Online%20Processing:TransmissionFilter list TransmitChList= 64 1 2 3 4 5 6 7 8 9 10 11 12 13 14 15 16 17 18 19 20 21 22 23 24 25 26 27 28 29 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61 62 63 64 // list of transmitted channels
System:Additional%20Connections:EventLink int EventLink= 1 1 0 1 // Send events from Operator to Source module (boolean)
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System:Configuration matrix SignalSourceFilterChain= 9 { Filter%20Name Position%20String } DataIOFilter 0 Biosemi2ADC 1 NullFileWriter 1 BCI2000FileWriter 1 EDFFileWriter 1 GDFFileWriter 1 SourceFilter 1.01 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain
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Filtering:SpatialFilter int SpatialFilterType= 1 2 0 3 // spatial filter type 0: none, 1: full matrix, 2: sparse matrix, 3: common average reference (CAR) (enumeration)
Filtering:SpatialFilter:SpatialFilter matrix SpatialFilter= 64 64 1 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 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1 0 % % // columns represent input channels, rows represent output channels
Filtering:SpatialFilter:SpatialFilter intlist SpatialFilterCAROutput= 0 // when using CAR filter type: list of output channels, or empty for all channels
Filtering:SpatialFilter:SpatialFilter int SpatialFilterMissingChannels= 1 0 0 1 // how to handle missing channels 0: ignore, 1: report error (enumeration)
Filtering:Spectral%20Estimation:ARThread float FirstBinCenter= 0Hz 0Hz % % // Center of first frequency bin (in Hz)
Filtering:Spectral%20Estimation:ARThread float LastBinCenter= 30Hz 30Hz % % // Center of last frequency bin (in Hz)
Filtering:Spectral%20Estimation:ARThread float BinWidth= 3Hz 3Hz % % // Width of spectral bins (in Hz)
Filtering:Spectral%20Estimation:ARThread int OutputType= 0 0 0 2 // 0: Spectral Amplitude, 1: Spectral Power, 2: Coefficients (enumeration)
Filtering:AR%20Spectral%20Estimator:ARThread int ModelOrder= 16 16 0 % // AR model order
Filtering:AR%20Spectral%20Estimator:ARThread int EvaluationsPerBin= 15 15 1 % // Number of uniformly spaced evaluation points entering into a single bin value
Filtering:Windowing:WindowingThread int WindowLength= 160ms 0.5s % % // Length of window
Filtering:Windowing:WindowingThread int Detrend= 1 0 0 2 // Detrend data? 0: no, 1: mean, 2: linear (enumeration)
Filtering:Windowing:WindowingThread int WindowFunction= 0 0 0 3 // Window function 0: Rectangular, 1: Hamming, 2: Hann, 3: Blackman (enumeration)
Filtering:LinearClassifier matrix Classifier= 4 { input%20channel input%20element%20(bin) output%20channel weight } 50 12Hz 1 1 13 12Hz 1 -1 50 12%20Hz 2 -1 13 12Hz 2 -1 // Linear classification matrix in sparse representation
Filtering:LPFilter float LPTimeConstant= 0 16s 0 % // time constant for the low pass filter
Filtering:ExpressionFilter string StartRunExpression= % // expression executed on StartRun
Filtering:ExpressionFilter string StopRunExpression= % // expression executed on StopRun
Filtering:ExpressionFilter matrix Expressions= 2 1 signal(1,1) signal(2,1) // expressions used to compute the output of the ExpressionFilter (rows are channels; empty matrix for none)
Filtering:Normalizer floatlist NormalizerOffsets= 2 0 0 0 % % // normalizer offsets
Filtering:Normalizer floatlist NormalizerGains= 2 0 0 0 % % // normalizer gain values
Filtering:Normalizer intlist Adaptation= 2 2 2 0 0 2 // 0: no adaptation, 1: zero mean, 2: zero mean, unit variance (enumeration)
Filtering:Normalizer matrix BufferConditions= 2 2 (Feedback)&&(TargetCode==1) (Feedback)&&(TargetCode==1) (Feedback)&&(TargetCode==2) (Feedback)&&(TargetCode==2) // expressions corresponding to data buffers (columns correspond to output channels, multiple rows correspond to multiple buffers)
Filtering:Normalizer float BufferLength= 30s 9s % % // time window of past data per buffer that enters into statistic
Filtering:Normalizer string UpdateTrigger= (Feedback==0) // expression to trigger offset/gain update when changing from 0 (use empty string for continuous update)
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System:Configuration matrix SignalProcessingFilterChain= 6 { Filter%20Name Position%20String } SpatialFilter 2.B ARFilter 2.C LinearClassifier 2.D LPFilter 2.D1 ExpressionFilter 2.D2 Normalizer 2.E // SignalProcessing filter chain
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Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
Application:Application%20Window:ApplicationWindow int WindowWidth= 1920 640 0 % // width of Application window
Application:Application%20Window:ApplicationWindow int WindowHeight= 1200 480 0 % // height of Application window
Application:Application%20Window:ApplicationWindow int WindowLeft= -1920 0 % % // screen coordinate of Application window's left edge
Application:Application%20Window:ApplicationWindow int WindowTop= 0 0 % % // screen coordinate of Application window's top edge
Application:Application%20Window:ApplicationWindow string WindowBackgroundColor= 0x000000 0x505050 % % // Application window background color (color)
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Visualize:Application%20Log:ApplicationBase int ShowAppLog= 1 0 0 1 // Show application log window (boolean)
Application:Sequencing:FeedbackTask float PreRunDuration= 3s 2s 0 % // duration of pause preceding first trial
Application:Sequencing:FeedbackTask float PreFeedbackDuration= 3s 2s 0 % // duration of target display prior to feedback
Application:Sequencing:FeedbackTask float FeedbackDuration= 3s 3s 0 % // duration of feedback
Application:Sequencing:FeedbackTask float PostFeedbackDuration= 1s 1s 0 % // duration of result display after feedback
Application:Sequencing:FeedbackTask float ITIDuration= 3s 1s 0 % // duration of inter-trial interval
Application:Sequencing:FeedbackTask float MinRunLength= % 120s 0 % // minimum duration of a run; if blank, NumberOfTrials is used
Application:Sequencing:FeedbackTask int NumberOfTrials= 20 0 0 % // number of trials; if blank, MinRunLength is used
Application:Targets:FeedbackTask int NumberTargets= 4 2 0 255 // number of targets
Application:Targets:FeedbackTask intlist TargetSequence= 0 1 % % // fixed sequence in which targets should be presented (leave empty for random)
Application:Window:CursorFeedbackTask int RenderingQuality= 0 0 0 1 // rendering quality: 0: low, 1: high (enumeration)
Application:Sequencing:CursorFeedbackTask float MaxFeedbackDuration= 6s % 0 % // abort a trial after this amount of feedback time has expired
Application:3DEnvironment:CursorFeedbackTask floatlist CameraPos= 3 50 50 150 // camera position vector in percent coordinates of 3D area
Application:3DEnvironment:CursorFeedbackTask floatlist CameraAim= 3 50 50 50 // camera aim point in percent coordinates
Application:3DEnvironment:CursorFeedbackTask int CameraProjection= 0 0 0 2 // projection type: 0: flat, 1: wide angle perspective, 2: narrow angle perspective (enumeration)
Application:3DEnvironment:CursorFeedbackTask floatlist LightSourcePos= 3 50 50 150 // light source position in percent coordinates
Application:3DEnvironment:CursorFeedbackTask int LightSourceColor= 0xFFFFFF // light source RGB color (color)
Application:3DEnvironment:CursorFeedbackTask int WorkspaceBoundaryColor= 0x000000 0 % % // workspace boundary color (0xff000000 for invisible) (color)
Application:3DEnvironment:CursorFeedbackTask string WorkspaceBoundaryTexture= F:\Audrey\BCI2000\prog\images\black.bmp // path of workspace boundary texture (inputfile)
Application:Cursor:CursorFeedbackTask float CursorWidth= 10 10 0.0 % // feedback cursor width in percent of screen width
Application:Cursor:CursorFeedbackTask int CursorColorFront= 0xFF0080 // cursor color when it is at the front of the workspace (color)
Application:Cursor:CursorFeedbackTask int CursorColorBack= 0xFF0080 // cursor color when it is in the back of the workspace (color)
Application:Cursor:CursorFeedbackTask string CursorTexture= % // path of cursor texture (inputfile)
Application:Cursor:CursorFeedbackTask floatlist CursorPos= 3 50 50 50 // cursor starting position
Application:Targets:CursorFeedbackTask matrix Targets= 4 { pos%20x pos%20y pos%20z width%20x width%20y width%20z } 96 50 50 8 50 8 4 50 50 8 50 8 50 96 50 50 8 8 50 4 50 50 8 8 // target positions and widths in percentage coordinates
Application:Targets:CursorFeedbackTask int TargetColor= 0xFFFF00 // target color (color)
Application:Targets:CursorFeedbackTask string TargetTexture= % // path of target texture (inputfile)
Application:Targets:CursorFeedbackTask int TestAllTargets= 1 0 0 1 // test all targets for cursor collision? 0: test only the visible current target, 1: test all targets (enumeration)
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeStateName= % // State to be translated into keystrokes, empty for off
Connector:ConnectorOutput string ConnectorOutputAddress= localhost:45443 localhost:20321 % % // one or more IP:Port combinations, e.g. localhost:20321
Application:Localization:Localization string Language= Default Default % % // Language for user messages
Application:Localization:Localization matrix LocalizedStrings= { German } { Timeout Be%20prepared%20... T } Inaktiv Achtung%20... T // Localized user messages
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System:Configuration matrix ApplicationFilterChain= 4 { Filter%20Name Position%20String } ConnectorInput 2.9999 CursorFeedbackTask 3 KeystrokeFilter 3.1 ConnectorOutput 3.9999 // Application filter chain
System:Randomization int RandomSeed= 18010 0 % % // seed for the BCI2000 pseudo random number generator
System:Randomization int RandomizationWarning= 1 1 0 1 // warn if subsequent Runs have identical RandomSeed value (boolean)
