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System:Additional%20Connections int OperatorBackLink= 1 1 0 1 // Send final state and signal information to Operator (boolean)
Source:Signal%20Properties:DataIOFilter list ChannelNames= 0 // list of channel names
Source:Signal%20Properties:DataIOFilter floatlist SourceChOffset= 2 0 0 0 % % // Offset for channels in A/D units
Source:Signal%20Properties:DataIOFilter floatlist SourceChGain= 2 1 1 0.003 % % // gain for each channel (A/D units -> muV)
Storage:Data%20Location:DataIOFilter string DataDirectory= D:/Brad/bci_Continuous/BCI2000/data ..\data % % // path to top level data directory (directory)
Storage:Session:DataIOFilter string SubjectName= xx_CP_MOUSE_2016mmdd_TEST Name % % // subject alias
Storage:Session:DataIOFilter string SubjectSession= 001 001 % % // three-digit session number
Storage:Session:DataIOFilter string SubjectRun= 01 00 % % // two-digit run number
Storage:Documentation:DataIOFilter string ID_System= % // BCI2000 System Code
Storage:Documentation:DataIOFilter string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation:DataIOFilter string ID_Montage= % // BCI2000 Cap Montage Code
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Source:Signal%20Properties:SignalGeneratorADC int SourceCh= 2 16 1 % // number of digitized and stored channels
Source:Signal%20Properties:SignalGeneratorADC int SampleBlockSize= 40 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties:SignalGeneratorADC int SamplingRate= 1000 256Hz 1 % // sample rate
Source:SignalGeneratorADC int ModulateAmplitude= 1 0 0 1 // Modulate the amplitude with the mouse (0=no, 1=yes) (boolean)
Source:SignalGeneratorADC int SineChannelX= 1 0 0 % // Channel number of sinewave controlled by mouse x position
Source:SignalGeneratorADC int SineChannelY= 2 0 0 % // Channel number of sinewave controlled by mouse y position (0 for all)
Source:SignalGeneratorADC int SineChannelZ= 3 0 0 % // Channel number of sinewave controlled by mouse key state
Source:SignalGeneratorADC float SineFrequency= 10Hz 10Hz % % // Frequency of sine wave
Source:SignalGeneratorADC int SineAmplitude= 100muV 100muV % % // Amplitude of sine wave
Source:SignalGeneratorADC int NoiseAmplitude= 30muV 30muV % % // Amplitude of white noise (common to all channels)
Source:SignalGeneratorADC int DCOffset= 0muV 0muV % % // DC offset (common to all channels)
Source:SignalGeneratorADC string OffsetMultiplier= % StimulusType % % // Expression to multiply offset by
Source:SignalGeneratorADC int SignalType= 0 0 0 2 // numeric type of output signal:  0: int16, 1: float32, 2: int32 (enumeration)
Storage:Documentation:BCI2000FileWriter string StorageTime= Thu%20Oct%2024%2016:31:04%202013 // time of beginning of data storage
Source:Alignment:AlignmentFilter int AlignChannels= 0 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment:AlignmentFilter floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
Source:Online%20Processing:TransmissionFilter list TransmitChList= 2 1 2 // list of transmitted channels
System:Additional%20Connections:EventLink int EventLink= 1 1 0 1 // Send events from Operator to Source module (boolean)
System:Randomization int RandomSeed= 10 0 % % // seed for the BCI2000 pseudo random number generator
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System:Configuration matrix SignalSourceFilterChain= 8 { Filter%20Name Position%20String } DataIOFilter 0 SignalGeneratorADC 1 NullFileWriter 1 BCI2000FileWriter 1 EDFFileWriter 1 GDFFileWriter 1 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain
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Filtering:SpatialFilter int SpatialFilterType= 1 2 0 3 // spatial filter type 0: none, 1: full matrix, 2: sparse matrix, 3: common average reference (CAR) (enumeration)
Filtering:SpatialFilter:SpatialFilter matrix SpatialFilter= { C3 C4 } 2 1 0 0 1 0 % % // columns represent input channels, rows represent output channels
Filtering:SpatialFilter:SpatialFilter intlist SpatialFilterCAROutput= 0 // when using CAR filter type: list of output channels, or empty for all channels
Filtering:SpatialFilter:SpatialFilter int SpatialFilterMissingChannels= 1 0 0 1 // how to handle missing channels 0: ignore, 1: report error (enumeration)
Filtering:Spectral%20Estimation:ARThread float FirstBinCenter= 0Hz 0Hz % % // Center of first frequency bin (in Hz)
Filtering:Spectral%20Estimation:ARThread float LastBinCenter= 30Hz 30Hz % % // Center of last frequency bin (in Hz)
Filtering:Spectral%20Estimation:ARThread float BinWidth= 3Hz 3Hz % % // Width of spectral bins (in Hz)
Filtering:Spectral%20Estimation:ARThread int OutputType= 0 0 0 2 // 0: Spectral Amplitude, 1: Spectral Power, 2: Coefficients (enumeration)
Filtering:AR%20Spectral%20Estimator:ARThread int ModelOrder= 16 16 0 % // AR model order
Filtering:AR%20Spectral%20Estimator:ARThread int EvaluationsPerBin= 15 15 1 % // Number of uniformly spaced evaluation points entering into a single bin value
Filtering:Windowing:WindowingThread int WindowLength= 160ms 0.5s % % // Length of window
Filtering:Windowing:WindowingThread int Detrend= 1 0 0 2 // Detrend data? 0: no, 1: mean, 2: linear (enumeration)
Filtering:Windowing:WindowingThread int WindowFunction= 0 0 0 3 // Window function 0: Rectangular, 1: Hamming, 2: Hann, 3: Blackman (enumeration)
Filtering:LinearClassifier matrix Classifier= 4 { input%20channel input%20element%20(bin) 3 4 } C3 12Hz 1 -1 C4 12Hz 1 0 C3 12Hz 2 0 C4 12Hz 2 1 // Linear classification matrix in sparse representation
Filtering:LPFilter float LPTimeConstant= 0 16s 0 % // time constant for the low pass filter
Filtering:ExpressionFilter string StartRunExpression= % // expression executed on StartRun
Filtering:ExpressionFilter string StopRunExpression= % // expression executed on StopRun
Filtering:ExpressionFilter matrix Expressions= 0 1 // expressions used to compute the output of the ExpressionFilter (rows are channels; empty matrix for none)
Filtering:Normalizer floatlist NormalizerOffsets= 2 -211.743 0 0 % % // normalizer offsets
Filtering:Normalizer floatlist NormalizerGains= 2 0.00745954 0.00814666 0 % % // normalizer gain values
Filtering:Normalizer intlist Adaptation= 2 2 2 0 0 2 // 0: no adaptation, 1: zero mean, 2: zero mean, unit variance (enumeration)
Filtering:Normalizer matrix BufferConditions= 1 2 1 1 // expressions corresponding to data buffers (columns correspond to output channels, multiple rows correspond to multiple buffers)
Filtering:Normalizer float BufferLength= 60s 9s % % // time window of past data per buffer that enters into statistic
Filtering:Normalizer string UpdateTrigger= % // expression to trigger offset/gain update when changing from 0 (use empty string for continuous update)
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System:Configuration matrix SignalProcessingFilterChain= 6 { Filter%20Name Position%20String } SpatialFilter 2.B ARFilter 2.C LinearClassifier 2.D LPFilter 2.D1 ExpressionFilter 2.D2 Normalizer 2.E // SignalProcessing filter chain
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Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
Connector:ConnectorOutput string ConnectorOutputAddress= localhost:45443 localhost:20320 % % // IP address/port to write to, e.g. localhost:20320
Application:Localization:Localization string Language= Default Default % % // Language for user messages
Application:Localization:Localization matrix LocalizedStrings= { German } { Timeout Be%20prepared%20... T } Inaktiv Achtung%20... T // Localized user messages
System:Command%20Line%20Arguments variant PythonAppClassFile= BCIApplication_Test2.py BCIApplication_ContinuousPursuit2.py BCIApplication_ContinuousPursuit2.py BCIApplication_ContinuousPursuit2.py 
Source:Signal%20Properties:DataIOFilter list ReferenceChannelName= 0 % % a // list of labels for reference channel or channels
Source:Signal%20Properties:DataIOFilter list GroundChannelName= 0 % % a // label of the ground channel
Source:Playback int EnslavePython= 0 0 0 1 // force BCPy2000 modules to follow states supplied by the source module without being able to change them (boolean)
PythonApp string ApplicationDescription= continuous%20pursuit%20task%20(mouseInput) % a z // Identifies the stimulus presentation module
PythonApp int ShowSignalTime= 0 0 0 1 // show a timestamp based on the number of processed samples (boolean)
PythonApp:Design int TrialsPerBlock= 2 20 1 % // number of trials in one block
PythonApp:Design int BlocksPerRun= 1 20 1 % // number of sub-blocks in one run
PythonApp:Design int ShowFixation= 0 0 0 1 // show a fixation point in the center (boolean)
PythonApp:Design int ControlDim= 3 0 0 2 // Control Dimension: 1=1D-Horizontal, 2=1D-Vertical, 3=2D (enumeration)
PythonApp:Screen int ScreenId= -1 -1 % % // on which screen should the stimulus window be opened - use -1 for last
PythonApp:Screen float WindowHeight= 1200 100 % % // height of the stimulus window
PythonApp:Screen float WindowWidth= 1200 100 % % // width of the stimulus window
PythonApp:Screen float WindowLeft= -1575 100 % % // horizontal position of the stimulus window
PythonApp:Screen float WindowTop= 0 100 % % // vertical position of the stimulus window
PythonApp:Stimuli int CursorSize= 10 10 0 100 // diameter of cursor
PythonApp:Stimuli int TargetSize= 40 40 0 200 // diameter of target
PythonApp:Stimuli float TargetFriction= 1 1 0 10 // constant damping force on target movement
PythonApp:Stimuli float TargetViscosity= 1 1 0 10 // damping force proportional to velocity
PythonApp:Stimuli float TargetVariance= 3 1.0 0.0 10.0 // variance of force applied to target
PythonApp:Feedback int CursorFeedback= 1 1 0 1 // show online feedback cursor (boolean)
PythonApp:Feedback float CursorFriction= 1 1 0 10 // constant damping force on cursor movement
PythonApp:Feedback float CursorViscosity= 1 1 0 10 // damping force proportional to velocity
PythonApp:Feedback int ControlType= 2 0 0 2 // 1=force-based, 2=velocity-based, 0=let program choose
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System:Configuration matrix ApplicationFilterChain= 3 { Filter%20Name Position%20String } ConnectorInput 2.9999 PythonAppFilter 3 ConnectorOutput 3.9999 // Application filter chain
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System:Randomization int RandomizationWarning= 1 1 0 1 // warn if subsequent Runs have identical RandomSeed value (boolean)
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