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System:Additional%20Connections int OperatorBackLink= 1 1 0 1 // Send final state and signal information to Operator (boolean)
Filtering:SpatialFilter int SpatialFilterType= 1 2 0 3 // spatial filter type 0: none, 1: full matrix, 2: sparse matrix, 3: common average reference (CAR) (enumeration)
Filtering:SpatialFilter:SpatialFilter matrix SpatialFilter= 128 128 1 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 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1 0 % % // columns represent input channels, rows represent output channels
Filtering:SpatialFilter:SpatialFilter intlist SpatialFilterCAROutput= 0 // when using CAR filter type: list of output channels, or empty for all channels
Filtering:SpatialFilter:SpatialFilter int SpatialFilterMissingChannels= 1 0 0 1 // how to handle missing channels 0: ignore, 1: report error (enumeration)
Filtering:Spectral%20Estimation:ARThread float FirstBinCenter= 0Hz 0Hz % % // Center of first frequency bin (in Hz)
Filtering:Spectral%20Estimation:ARThread float LastBinCenter= 30Hz 30Hz % % // Center of last frequency bin (in Hz)
Filtering:Spectral%20Estimation:ARThread float BinWidth= 3Hz 3Hz % % // Width of spectral bins (in Hz)
Filtering:Spectral%20Estimation:ARThread int OutputType= 0 0 0 2 // 0: Spectral Amplitude, 1: Spectral Power, 2: Coefficients (enumeration)
Filtering:AR%20Spectral%20Estimator:ARThread int ModelOrder= 16 16 0 % // AR model order
Filtering:AR%20Spectral%20Estimator:ARThread int EvaluationsPerBin= 15 15 1 % // Number of uniformly spaced evaluation points entering into a single bin value
Filtering:Windowing:WindowingThread int WindowLength= 160ms 0.5s % % // Length of window
Filtering:Windowing:WindowingThread int Detrend= 1 0 0 2 // Detrend data? 0: no, 1: mean, 2: linear (enumeration)
Filtering:Windowing:WindowingThread int WindowFunction= 0 0 0 3 // Window function 0: Rectangular, 1: Hamming, 2: Hann, 3: Blackman (enumeration)
Filtering:LinearClassifier matrix Classifier= 4 { input%20channel input%20element%20(bin) output%20channel weight } 54 12Hz 1 1 115 12Hz 1 -1 54 12%20Hz 2 -1 115 12Hz 2 -1 // Linear classification matrix in sparse representation
Filtering:LPFilter float LPTimeConstant= 0 16s 0 % // time constant for the low pass filter
Filtering:ExpressionFilter string StartRunExpression= % // expression executed on StartRun
Filtering:ExpressionFilter string StopRunExpression= % // expression executed on StopRun
Filtering:ExpressionFilter matrix Expressions= 2 1 signal(1,1) 0 // expressions used to compute the output of the ExpressionFilter (rows are channels; empty matrix for none)
Filtering:Normalizer floatlist NormalizerOffsets= 2 0 0 0 % % // normalizer offsets
Filtering:Normalizer floatlist NormalizerGains= 2 0 0 0 % % // normalizer gain values
Filtering:Normalizer intlist Adaptation= 2 0 0 0 0 2 // 0: no adaptation, 1: zero mean, 2: zero mean, unit variance (enumeration)
Filtering:Normalizer matrix BufferConditions= 2 2 (Feedback)&&(TargetCode==1) (Feedback)&&(TargetCode==1) (Feedback)&&(TargetCode==2) (Feedback)&&(TargetCode==2) // expressions corresponding to data buffers (columns correspond to output channels, multiple rows correspond to multiple buffers)
Filtering:Normalizer float BufferLength= 30s 9s % % // time window of past data per buffer that enters into statistic
Filtering:Normalizer string UpdateTrigger= (Feedback==0) // expression to trigger offset/gain update when changing from 0 (use empty string for continuous update)
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System:Configuration matrix SignalProcessingFilterChain= 6 { Filter%20Name Position%20String } SpatialFilter 2.B ARFilter 2.C LinearClassifier 2.D LPFilter 2.D1 ExpressionFilter 2.D2 Normalizer 2.E // SignalProcessing filter chain
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Source:Signal%20Properties:DataIOFilter int SourceCh= 128 16 1 % // number of digitized and stored channels
Source:Signal%20Properties:DataIOFilter int SampleBlockSize= 40 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties:DataIOFilter int SamplingRate= 1024 256Hz 1 % // sample rate
Source:Signal%20Properties:DataIOFilter floatlist SourceChOffset= 128 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 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0 0 % % // Offset for channels in A/D units
Source:Signal%20Properties:DataIOFilter floatlist SourceChGain= 128 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 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0.03125 0.003 % % // gain for each channel (A/D units -> muV)
Source:Signal%20Properties:DataIOFilter list ChannelNames= 0 // list of channel names
Storage:Data%20Location:DataIOFilter string DataDirectory= D:/Brad/bci_Continuous/BCI2000/data/xx ..\data % % // path to top level data directory (directory)
Storage:Session:DataIOFilter string SubjectName= xx_MI_LR_TRAIN_2016mmdd Name % % // subject alias
Storage:Session:DataIOFilter string SubjectSession= 001 001 % % // three-digit session number
Storage:Session:DataIOFilter string SubjectRun= 01 00 % % // two-digit run number
Storage:Documentation:DataIOFilter string ID_System= % // BCI2000 System Code
Storage:Documentation:DataIOFilter string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation:DataIOFilter string ID_Montage= % // BCI2000 Cap Montage Code
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Source:Biosemi2ADC intlist EEGChList= 128 1 2 3 4 5 6 7 8 9 10 11 12 13 14 15 16 17 18 19 20 21 22 23 24 25 26 27 28 29 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128 % 1 % // list of physical channel indices for the EEG channels in use
Source:Biosemi2ADC intlist AIBChList= 0 % 1 32 // list of Auxiliary Input Box channels to acquire after the EEG channels (included in the SourceCh total)
Source:Biosemi2ADC intlist TriggerChList= 0 % 0 16 // list of one-bit trigger channels to append to the end (included in the SourceCh total) or a single 0 to acquire all trigger channels as a single 16-bit channel
Storage:Documentation:BCI2000FileWriter string StorageTime= 2015-10-29T09:09:54 // time of beginning of data storage
Source:Source%20Filter:SourceFilter int NotchFilter= 2 0 0 2 // Power line notch filter: 0: disabled, 1: at 50Hz, 2: at 60Hz (enumeration)
Source:Source%20Filter:SourceFilter int HighPassFilter= 2 0 0 2 // Source high pass filter: 0: disabled, 1: at 0.1Hz, 2: at 1Hz (enumeration)
Source:Source%20Filter:SourceFilter int LowPassFilter= 0 0 0 4 // Source low pass filter: 0: disabled, 1: at 9Hz, 2: at 30Hz, 3: at 40Hz, 4: at 70Hz (enumeration)
Source:Alignment:AlignmentFilter int AlignChannels= 0 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment:AlignmentFilter floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
Source:Online%20Processing:TransmissionFilter list TransmitChList= 128 1 2 3 4 5 6 7 8 9 10 11 12 13 14 15 16 17 18 19 20 21 22 23 24 25 26 27 28 29 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125 126 127 128 // list of transmitted channels
System:Additional%20Connections:EventLink int EventLink= 1 1 0 1 // Send events from Operator to Source module (boolean)
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System:Configuration matrix SignalSourceFilterChain= 9 { Filter%20Name Position%20String } DataIOFilter 0 Biosemi2ADC 1 NullFileWriter 1 BCI2000FileWriter 1 EDFFileWriter 1 GDFFileWriter 1 SourceFilter 1.01 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain
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Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
Application:Application%20Window:ApplicationWindow int WindowWidth= 1920 640 0 % // width of Application window
Application:Application%20Window:ApplicationWindow int WindowHeight= 1200 480 0 % // height of Application window
Application:Application%20Window:ApplicationWindow int WindowLeft= -1920 0 % % // screen coordinate of Application window's left edge
Application:Application%20Window:ApplicationWindow int WindowTop= 0 0 % % // screen coordinate of Application window's top edge
Application:Application%20Window:ApplicationWindow string WindowBackgroundColor= 0x000000 0x505050 % % // Application window background color (color)
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Visualize:Application%20Log:ApplicationBase int ShowAppLog= 1 0 0 1 // Show application log window (boolean)
Application:Sequencing:StimulusTask float PreRunDuration= 3000ms 1 0 % // pause preceding first sequence
Application:Sequencing:StimulusTask float PostRunDuration= 0s 0 0 % // pause following last sequence
Application:Sequencing:StimulusTask float PreSequenceDuration= 0s 2s 0 % // pause preceding sequences/sets of intensifications
Application:Sequencing:StimulusTask float PostSequenceDuration= 0s 2s 0 % // pause following sequences/sets of intensifications
Application:Sequencing:StimulusTask float StimulusDuration= 4000ms 40ms 0 % // stimulus duration
Application:Sequencing:StimulusTask float ISIMinDuration= 3000ms 80ms 0 % // minimum duration of inter-stimulus interval
Application:Sequencing:StimulusTask float ISIMaxDuration= 3000ms 80ms 0 % // maximum duration of inter-stimulus interval
Application:Result%20Processing:StimulusTask int InterpretMode= 0 0 0 2 // interpretation of results: 0 none, 1 online free mode, 2 copy mode (enumeration)
Application:Result%20Processing:StimulusTask int DisplayResults= 1 1 0 1 // display results of copy/free spelling (boolean)
Application:Sequencing:StimulusPresentationTask intlist Sequence= 2 1 1 // Sequence in which stimuli are presented (deterministic mode)/ Stimulus frequencies for each stimulus (random mode)/ Ignored (P3Speller compatible mode)
Application:Sequencing:StimulusPresentationTask int SequenceType= 1 0 0 2 // Sequence of stimuli is 0 deterministic, 1 random, 2 P3Speller compatible (enumeration)
Application:Sequencing:StimulusPresentationTask int NumberOfSequences= 10 1 0 % // number of sequence repetitions
Application:Sequencing:StimulusPresentationTask intlist ToBeCopied= 0 1 1 % // Sequence in which stimuli need to be copied (only used in copy mode)
Application:Sequencing:StimulusPresentationTask string UserComment= % // User comments for a specific run
Application:Stimuli:StimulusPresentationTask matrix Stimuli= { caption icon audio } { stimulus1 stimulus2 } Imagine_Right Imagine_Left % % % % // captions and icons to be displayed, sounds to be played for different stimuli
Application:Stimuli:StimulusPresentationTask matrix FocusOn= { caption icon audio } { focuson } Please%20focus%20on images\focuson.bmp sounds\uh-uh.wav // initial announcement what to focus on
Application:Stimuli:StimulusPresentationTask matrix Result= { caption icon audio } { result } The%20result%20was images\result.bmp sounds\uh-uh.wav // final result announcement 
Application:Stimuli:StimulusPresentationTask int StimulusWidth= 5 0 0 100 // StimulusWidth in percent of screen width (zero for original pixel size)
Application:Stimuli:StimulusPresentationTask int CaptionHeight= 10 0 0 100 // Height of stimulus caption text in percent of screen height
Application:Stimuli:StimulusPresentationTask string CaptionColor= 0x00FFFFFF 0x00FFFFFF 0x00000000 0xFFFFFFFF // Color of stimulus caption text (color)
Application:Stimuli:StimulusPresentationTask string BackgroundColor= 0x00FFFF00 0x00FFFF00 0x00000000 0xFFFFFFFF // Color of stimulus background (color)
Application:Stimuli:StimulusPresentationTask int CaptionSwitch= 1 1 0 1 // Present captions (boolean)
Application:Stimuli:StimulusPresentationTask int IconSwitch= 1 1 0 1 // Present icon files (boolean)
Application:Stimuli:StimulusPresentationTask int AudioSwitch= 1 1 0 1 // Present audio files (boolean)
Application:Stimuli:StimulusPresentationTask float AudioVolume= 0 100 0 100 // Volume for audio playback in percent
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeStateName= % // State to be translated into keystrokes, empty for off
Connector:ConnectorOutput string ConnectorOutputAddress= localhost:45443 localhost:20321 % % // one or more IP:Port combinations, e.g. localhost:20321
Application:Localization:Localization string Language= Default Default % % // Language for user messages
Application:Localization:Localization matrix LocalizedStrings= { German } { Timeout Be%20prepared%20... T } Inaktiv Achtung%20... T // Localized user messages
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System:Configuration matrix ApplicationFilterChain= 4 { Filter%20Name Position%20String } ConnectorInput 2.9999 StimulusPresentationTask 3 KeystrokeFilter 3.1 ConnectorOutput 3.9999 // Application filter chain
System:Randomization int RandomSeed= 11515 0 % % // seed for the BCI2000 pseudo random number generator
System:Randomization int RandomizationWarning= 1 1 0 1 // warn if subsequent Runs have identical RandomSeed value (boolean)
